PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  eRTLackEyes = RIGHT_EYE
  eRTLackingMode = PUPIL_CR_TRACKING
  expName = TRY1
  keyboardBackend = ioHub
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Routines
  Routine cross
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine Instructions
    ImageComponent image
      image = Instructions_image.PNG
      size = (2, 2)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent target_word
      color = black
      languageStyle = RTL
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text [set every repeat] = $word
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    SoundComponent target_sound
      sound [set every repeat] = $sound_target
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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  Routine question
    TextComponent target_quest
      color = black
      languageStyle = RTL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Question_stim
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Flow
  Routine Instructions
  LoopInitiator questions loopType="TrialHandler"
    conditionsFile = questions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Question_stim': 'האם השם שלך הוא חנה?'},
      {'Question_stim': 'האם את גרה באשדוד?'},
      {'Question_stim': 'האם יש לך חמישה ילדים?'},
      {'Question_stim': 'האם לאריאל יש שני בנים?'},
      {'Question_stim': 'האם איתן גר בישראל?'}]
    Routine question
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stim_words.xlsx
      loopType = fullRandom
      nReps = 2
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      conditions:
        [{'stim': 'yes', 'word': 'ןכ', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\YEShebYardenSHORT.wav'},
        {'stim': 'no', 'word': 'אל', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\NOhebYardenSHORT.wav'},
        {'stim': 'whiteNoise', 'word': 'שער', 'color': 'grey', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\PinkNoise.wav'}]
      Routine cross
      Routine trial
    LoopTerminator trials
  LoopTerminator questions
