PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  eRTLackEyes = RIGHT_EYE
  eRTLackingMode = PUPIL_CR_TRACKING
  expName = TRY_rec
  keyboardBackend = ioHub
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Routines
  Routine cross
    PolygonComponent polygon
      fillColor = -1, -1, -1
      lineColor = -1, -1, -1
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.7
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  Routine Instructions
    ImageComponent image
      image = Instructions_image.PNG
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent target_word
      color = black
      languageStyle = RTL
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $word
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    SoundComponent target_sound
      sound [set every repeat] = $sound_target
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine question
    TextComponent target_quest
      color = black
      languageStyle = RTL
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $Question_stim
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  Routine finished
    TextComponent how_much
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = 1/30
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  Routine start_closed_eyes
    ImageComponent image_2
      color = 1, 1, 1
      image = C:/Users/yarde/Documents/GitHub/BCI4ALS-MI/start_closed_eyes.png
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine grey_screen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beep
    SoundComponent sound_1
      sound = C:/Users/yarde/Documents/GitHub/BCI4ALS-MI/Beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine start_closed_eyes
  Routine grey_screen
  Routine beep
  Routine Instructions
  LoopInitiator questions loopType="TrialHandler"
    conditionsFile = questions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Question_stim': 'האם השם שלך הוא חנה?'},
      {'Question_stim': 'האם את גרה באשדוד?'},
      {'Question_stim': 'האם יש לך חמישה ילדים?'},
      {'Question_stim': 'האם לאריאל יש שני בנים?'},
      {'Question_stim': 'האם איתן גר בישראל?'}]
    Routine question
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = C:/Users/yarde/Documents/GitHub/BCI4ALS-MI/stim_words.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'stim': 'yes', 'word': 'ןכ', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\YEShebYardenSHORT.wav', 'target': 1},
        {'stim': 'no', 'word': 'אל', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\NOhebYardenSHORT.wav', 'target': 2},
        {'stim': 'whiteNoise', 'word': 'שער', 'color': 'grey', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\PinkNoise.wav', 'target': 0},
        {'stim': 'came', 'word': 'אב', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\CAMEhebYarden.wav', 'target': 0},
        {'stim': 'hot', 'word': 'םח', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\HOThebYarden.wav', 'target': 0},
        {'stim': 'indicator', 'word': 'דמ', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\INDICATORhebYarden.wav', 'target': 0},
        {'stim': 'candle', 'word': 'רנ', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\CANDLEhebYarden.wav', 'target': 0},
        {'stim': 'whiteNoise', 'word': 'שער', 'color': 'grey', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\PinkNoise.wav', 'target': 0},
        {'stim': 'no', 'word': 'אל', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\NOhebYardenSHORT.wav', 'target': 2},
        {'stim': 'candle', 'word': 'רנ', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\CANDLEhebYarden.wav', 'target': 0}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
      Routine cross
      Routine trial
    LoopTerminator trials
    Routine finished
  LoopTerminator questions
