PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = p300_basic_visual
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      wrapWidth = 3
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      text:
        In each trial you'll see a series of shapes.
        The shape will be either a circle or a triangle.
        You need to concentrate only on the circle
        and count each time it appears.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine target_beep
    SoundComponent sound_1
      sound = beep-03.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextComponent text_3
      color = grey
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine start
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You can press any key to start
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_trial
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Begining of trial:
        Press spacebar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine polygon_change
    PolygonComponent circle
      fillColor = red
      lineColor = red
      opacity [set every repeat] = target
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent triangle
      fillColor = blue
      lineColor = blue
      opacity [set every repeat] = 1-target
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent polygon
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.8
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Flow
  Routine Instructions
  Routine start
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine begin_trial
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stim_basic_visual.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'Circle', 'color': 'red', 'target': 1},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'Circle', 'color': 'red', 'target': 1},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'Circle', 'color': 'red', 'target': 1},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'Circle', 'color': 'red', 'target': 1},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'Circle', 'color': 'red', 'target': 1},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'Circle', 'color': 'red', 'target': 1},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0},
        {'stim': 'rectangle', 'color': 'blue', 'target': 0}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
      Routine polygon_change
    LoopTerminator trials
  LoopTerminator trials_2
